#pragma once
#include "Device Sub-method Libraries\\HSLCap\\HSLCap.hsl"
#include "HSLTrcLib.hsl"
#include "ASWStandard\\TraceLevel\\TraceLevel.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace SCAP_STARPLUS {
  variable _devScap1;
  variable _devScap2;
  variable _blnTestState;
  function Connect( variable & _arrComports[], variable _blnTraceLevel, variable _blnSimMode, variable _blnTest ) void ;
  function Disconnect(  ) void ;
  function GetDoorState( variable & _blnDoorState1, variable & _blnDoorState2 ) void ;
  function GetFanSpeed( variable & _intFanSpeed1, variable & _intFanSpeed2 ) void ;
  function GetFanState( variable & _intFanState1, variable & _intFanState2 ) void ;
  function GetHepaFilterStatus( variable & _strHepaFilterStatus1, variable & _strHepaFilterStatus2 ) void ;
  function GetHumidity( variable & _fltHumidity1, variable & _fltHumidity2 ) void ;
  function GetLightState( variable & _intLightState1, variable & _intLightState2 ) void ;
  function GetPrefilterStatus( variable & _strPrefilterStatus1, variable & _strPrefilterStatus2 ) void ;
  function GetTemperature( variable & _strTemp1, variable & _strTemp2 ) void ;
  function SetFanSpeed( variable _intFanSpeed ) void ;
  function SetFanState( variable _blnFanState ) void ;
  function SetLightState( variable _blnLightState ) void ;
  private function _Error( variable _intErrorCode ) void ;
  function _InitLibrary() {
  }
  function _ExitLibrary() {
  }

  function Connect( variable & _arrComports[], variable _blnTraceLevel, variable _blnSimMode, variable _blnTest ) void {
    private variable _rtnCode;
    private variable _rtn;
    private variable _loopCounter1;
    private variable _intSCAPs;
    _blnTestState = _blnTest;
    if (_blnTraceLevel == 1)
    {
      _rtn = HSLCap::SetTraceLevel(HSLCap::TRACE_LEVEL_DEBUG);
      _Error(_rtn);
    }
    else
    {
      _rtn = HSLCap::SetTraceLevel(HSLCap::TRACE_LEVEL_RELEASE);
      _Error(_rtn);
    }
    if (_blnSimMode == 1)
    {
      _rtnCode = HSLCap::OverrideSimulation(HSLCap::_TRUE);
      _Error(_rtnCode);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- [SCAP] OverrideSimulation - active;"), Translate(""));
    }
    else
    {
      MECC::TraceComment(Translate("----- SCAP in instrument mode -----"));
      _rtnCode = HSLCap::OverrideSimulation(HSLCap::_FALSE);
      _Error(_rtnCode);
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> [SCAP] OverrideSimulation - off;"), Translate(""));
    }
    _intSCAPs=_arrComports.GetSize();
    {
      for(_loopCounter1 = 0; _loopCounter1 < _intSCAPs;)
      {
        _loopCounter1 = _loopCounter1 + 1;
        if (_blnTest == 0)
        {
          _rtnCode = HSLCap::Connect(_arrComports.ElementAt( _loopCounter1 -1), _devScap1);
          _Error(_rtnCode);
          TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- [SCAP] Connect "), _devScap1, Translate(" - complete;"), Translate(""));
        }
        else
        {
          TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- [SCAP] Connect "), _devScap1, Translate(" - testing;"), Translate(""));
        }
      }
    }
  }

  function Disconnect(  ) void {
    private variable _rtnCode;
    _rtnCode = HSLCap::Disconnect(_devScap1);
    _Error(_rtnCode);
    _rtnCode = HSLCap::Disconnect(_devScap2);
    _Error(_rtnCode);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> [SCAP] Disconnected to SCAP"), Translate(""), Translate(""), Translate(""));
  }

  function GetDoorState( variable & _blnDoorState1, variable & _blnDoorState2 ) void {
    private variable _rtnCode;
    _blnDoorState1 = 0;
    _blnDoorState2 = 0;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetDoorState -- Start <<<<<"));
    _rtnCode = HSLCap::GetDoorState(_devScap1, _blnDoorState1);
    _Error(_rtnCode);
    _rtnCode = HSLCap::GetDoorState(_devScap2, _blnDoorState2);
    _Error(_rtnCode);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> [SCAP] GetDoorState"), Translate(""), Translate(""), Translate(""));
    MECC::TraceComment(Translate(">>>>> HSLCap::GetDoorState -- Complete <<<<<"));
  }

  private function _Error( variable _intErrorCode ) void {
    private variable _rtnCode;
    private variable _strErrorMessage;
    if (_rtnCode != 0)
    {
      MECC::TraceComment(Translate("//////////////// SCAP_STARplus.smt encountered an error"));
      TrcTrace(Translate("----- _rtnCode = "), _rtnCode);
      HSLCap::GetLastErrorMessage(_devScap1, _strErrorMessage);
      abort;
    }
  }

  function GetFanSpeed( variable & _intFanSpeed1, variable & _intFanSpeed2 ) void {
    private variable _rtnCode;
    _intFanSpeed1 = 0;
    _intFanSpeed2 = 0;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetFanSpeed -- Start <<<<<"));
    _rtnCode = HSLCap::GetFanSpeed(_devScap1, _intFanSpeed1);
    _Error(_rtnCode);
    _rtnCode = HSLCap::GetFanSpeed(_devScap2, _intFanSpeed2);
    _Error(_rtnCode);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> [SCAP] GetFanSpeed"), Translate(""), Translate(""), Translate(""));
    MECC::TraceComment(Translate(">>>>> HSLCap::GetFanSpeed -- Complete <<<<<"));
  }

  function GetFanState( variable & _intFanState1, variable & _intFanState2 ) void {
    private variable _rtnCode;
    _intFanState1 = 0;
    _intFanState2 = 0;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetFanState -- Start <<<<<"));
    _rtnCode = HSLCap::GetFanState(_devScap1, _intFanState1);
    _Error(_rtnCode);
    _rtnCode = HSLCap::GetFanState(_devScap2, _intFanState2);
    _Error(_rtnCode);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> [SCAP] GetFanState"), Translate(""), Translate(""), Translate(""));
    MECC::TraceComment(Translate(">>>>> HSLCap::GetFanState -- Complete <<<<<"));
  }

  function GetHepaFilterStatus( variable & _strHepaFilterStatus1, variable & _strHepaFilterStatus2 ) void {
    private variable _rtnCode;
    _strHepaFilterStatus1 = 0;
    _strHepaFilterStatus2 = 0;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetHepaFilterStatus -- Start <<<<<"));
    _rtnCode = HSLCap::GetHepaFilterStatus(_devScap1, _strHepaFilterStatus1);
    _Error(_rtnCode);
    _rtnCode = HSLCap::GetHepaFilterStatus(_devScap2, _strHepaFilterStatus2);
    _Error(_rtnCode);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> [SCAP] GetHepaFilterStatus"), Translate(""), Translate(""), Translate(""));
    MECC::TraceComment(Translate(">>>>> HSLCap::GetHepaFilterStatus  -- Complete <<<<<"));
  }

  function GetHumidity( variable & _fltHumidity1, variable & _fltHumidity2 ) void {
    private variable _rtnCode;
    _fltHumidity1 = 0;
    _fltHumidity2 = 0;
    _rtnCode = HSLCap::GetHumidity(_devScap1, _fltHumidity1);
    _Error(_rtnCode);
    _rtnCode = HSLCap::GetHumidity(_devScap2, _fltHumidity2);
    _Error(_rtnCode);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> [SCAP] GetHumidity"), Translate(""), Translate(""), Translate(""));
    MECC::TraceComment(Translate(">>>>> HSLCap::GetHumidity -- Complete <<<<<"));
  }

  function GetLightState( variable & _intLightState1, variable & _intLightState2 ) void {
    private variable _rtnCode;
    _intLightState1 = 0;
    _intLightState2 = 0;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetLightState -- Start <<<<<"));
    _rtnCode = HSLCap::GetLightState(_devScap1, _intLightState1);
    _Error(_rtnCode);
    _rtnCode = HSLCap::GetLightState(_devScap2, _intLightState2);
    _Error(_rtnCode);
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> [SCAP] GetLightState"), Translate(""), Translate(""), Translate(""));
  }

  function GetPrefilterStatus( variable & _strPrefilterStatus1, variable & _strPrefilterStatus2 ) void {
    private variable _rtnCode;
    _strPrefilterStatus1 = 0;
    _strPrefilterStatus2 = 0;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetPrefilterStatus -- Start <<<<<"));
    _rtnCode = HSLCap::GetPrefilterStatus(_devScap1, _strPrefilterStatus1);
    _Error(_rtnCode);
    _rtnCode = HSLCap::GetPrefilterStatus(_devScap2, _strPrefilterStatus2);
    _Error(_rtnCode);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetPrefilterStatus -- Complete <<<<<"));
  }

  function GetTemperature( variable & _strTemp1, variable & _strTemp2 ) void {
    private variable _rtnCode;
    _strTemp1 = 0;
    _strTemp2 = 0;
    MECC::TraceComment(Translate(">>>>> HSLCap::GetTemperature -- Start <<<<<"));
    _rtnCode = HSLCap::GetTemperature(_devScap1, _strTemp1);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Left - Temperature = "), _strTemp1);
    _rtnCode = HSLCap::GetTemperature(_devScap2, _strTemp2);
    _Error(_rtnCode);
    TrcTrace(Translate("----- SCAP_Right - Temperature = "), _strTemp2);
    MECC::TraceComment(Translate(">>>>> HSLCap::GetTemperature -- Complete <<<<<"));
  }

  function SetFanSpeed( variable _intFanSpeed ) void {
    private variable _rtnCode;
    if (_blnTestState == 0)
    {
      _rtnCode = HSLCap::SetFanSpeed(_devScap1, _intFanSpeed);
      _Error(_rtnCode);
    }
    if (_blnTestState == 0)
    {
      _rtnCode = HSLCap::SetFanSpeed(_devScap2, _intFanSpeed);
      _Error(_rtnCode);
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- [SCAP] Set Fan Speed: "), _intFanSpeed, Translate(""), Translate(""));
  }

  function SetFanState( variable _blnFanState ) void {
    private variable _rtnCode;
    MECC::TraceComment(Translate(">>>>> HSLCap::SetFanState -- Start <<<<<"));
    if (_blnTestState == 0)
    {
      _rtnCode = HSLCap::SetFanState(_devScap1, _blnFanState);
      _Error(_rtnCode);
    }
    if (_blnTestState == 0)
    {
      _rtnCode = HSLCap::SetFanState(_devScap2, _blnFanState);
      _Error(_rtnCode);
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> [SCAP] Set Fan State: "), _blnFanState, Translate(""), Translate(""));
    MECC::TraceComment(Translate(">>>>> HSLCap::SetFanState -- Complete <<<<<"));
  }

  function SetLightState( variable _blnLightState ) void {
    private variable _rtnCode;
    if (_blnTestState == 0)
    {
      _rtnCode = HSLCap::SetLightState(_devScap1, _blnLightState);
      _Error(_rtnCode);
    }
    _rtnCode = HSLCap::SetLightState(_devScap1, _blnLightState);
    _Error(_rtnCode);
    if (_blnTestState == 0)
    {
      _rtnCode = HSLCap::SetLightState(_devScap2, _blnLightState);
      _Error(_rtnCode);
    }
    TRACELEVEL::Trace_04(TRACE_LEVEL_DEBUG, Translate("-- [SCAP] Set Light State: "), _blnLightState, Translate(""), Translate(""));
  }
} // library namespace
