#pragma once
#include "HSLStrLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace SLOW96HEAD {
  private function Abstract(  ) void ;
  function MPH_96_ResetMovement( device & ML_STAR ) void ;
  function MPH_96_SlowMovement( device & ML_STAR, variable _varAxis ) void ;
  function MPH_96_SlowMovement_Variable( device & ML_STAR, variable _varAxis, variable _intRelativeSpeed, variable _intRelativeAcceleration ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function MPH_96_ResetMovement( device & ML_STAR ) void {
    private variable _strFWCommand;
    Abstract();
    _strFWCommand = Translate("H0AA");
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
  }

  function MPH_96_SlowMovement( device & ML_STAR, variable _varAxis ) void {
    private variable _strFWCommand;
    Abstract();
    _strFWCommand = Translate("H0AA");
    if (_varAxis != 2)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    if (_varAxis >= 2)
    {
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }

  private function Abstract(  ) void {
    Trace("##### Slow96Head.smt - V1.2 - July2023");
  }

  function MPH_96_SlowMovement_Variable( device & ML_STAR, variable _varAxis, variable _intRelativeSpeed, variable _intRelativeAcceleration ) void {
    private variable _fltPercentChange_Speed;
    private variable _strFWCommand;
    private variable _fltPercentChange_Acceleration;
    private variable _strFWParameter;
    Abstract();
    _fltPercentChange_Speed = _intRelativeSpeed / (100 * 1.0);
    _fltPercentChange_Acceleration = _intRelativeAcceleration / (100 * 1.0);
    _strFWCommand = Translate("H0AA");
    _strFWParameter = Translate("");
    if (_varAxis != 2)
    {
      _strFWParameter = StrConcat2("yv", StrRight(StrConcat2("00000", StrIStr(MthCeiling(_fltPercentChange_Speed * 25000))),(5)));
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      _strFWParameter = StrConcat2("yr", StrRight(StrConcat2("00000", StrIStr(MthCeiling(_fltPercentChange_Acceleration * 35000))),(5)));
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
    if (_varAxis >= 2)
    {
      _strFWParameter = StrConcat2("zv", StrRight(StrConcat2("00000", StrIStr(MthCeiling(_fltPercentChange_Speed * 17000))),(5)));
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
      _strFWParameter = StrConcat2("zr", StrRight(StrConcat2("000000", StrIStr(MthCeiling(_fltPercentChange_Acceleration * 80000))),(6)));
      ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    }
  }
} // library namespace
